objref spines_to_stim_indexes, apical_to_stim_indexes, iclamps, stim
spines_to_stim_len = 1
spines_to_stim_indexes = new Vector(spines_to_stim_len)
apical_to_stim_indexes = new Vector(spines_to_stim_len)

spines_to_stim_indexes.x[0] = 471 //left closer to soma apical_dend[52]
apical_to_stim_indexes.x[0] = 52

/*spines_to_stim_indexes.x[1] = 455 // left middle-range from soma apical_dend[35]
apical_to_stim_indexes.x[1] = 35

spines_to_stim_indexes.x[2] = 18 // right closer to soma apical_dend[50]
apical_to_stim_indexes.x[2] = 50

spines_to_stim_indexes.x[3] = 324 // right middle-range from soma apical_dend[6]
apical_to_stim_indexes.x[3] = 6*/

proc removeAllCa3Stims() {
    // silence any extra synapses
    for (i=0; i < nCA3max; i=i+1) {
        CA3list.o(i).stim.number = 0
        ncCA3list.o(i).weight = 0
        ncCA3Nlist.o(i).weight = 0
    }
    print "all Striatum Radiatum (Ca3) stims removed."
}

objref sh
proc setSelectedSpinesToStimCA3() {local i, spine_index
    //stim selected spines with indexes from: spines_to_stim_indexes and show them on the neuron shape
    removeAllCa3Stims()
    sh = new Shape()

    spine_index = 0
    for (i=0; i < spines_to_stim_len; i=i+1) {
        spine_index = spines_to_stim_indexes.x[i]

        // BurstCell with NetCon
        CA3list.o(spine_index).stim.number = CNUM
        CA3list.o(spine_index).stim.start = CSTART
        CA3list.o(spine_index).stim.interval = CINT
        CA3list.o(spine_index).stim.noise = CNOISE

        // NetCon BurstCel->AMPA
        ncCA3list.o(spine_index).weight = CAWGT
        ncCA3list.o(spine_index).delay = CDEL

        // NetCon BurstCell->NMDA
        ncCA3Nlist.o(spine_index).weight = CNWGT
        ncCA3Nlist.o(spine_index).delay = CDEL
        print "activated synapse with spine_index:", spines_to_stim_indexes.x[i]

        cell.shead[spine_index] {
            sh.color(i+2)
            sh.len_scale(100)
        }
    }
    sh.show(1)
}

proc hz_stim() {
    CINT = 1000/HZSTIM
    CNUM = int(HZSTIM * (HZTIMESTIM/1000))
    if (CNUM < 1) {
        CNUM = 1
    }
    setSelectedSpinesToStimCA3()
}

proc ic_stim() {
    iclamps = new List()

    del = ICSTART
    for (i=0; i < ICNUM; i=i+1) {
        PyramidalCell[0].soma[0] stim = new IClamp(0.5)
        iclamps.append(stim)

        stim.del = del
        stim.dur = ICDUR
        stim.amp = ICAMP
        del = del + ICINT
    }
}